PsychoPy2experiment version="2024.2.1post4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = soloprojectlexical
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $words
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = <- non-words              words ->
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  Routine ins
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will be asked to judge if a string of letters is a word or a non-word.

        Press the left arrow key for non-words and right arrow key for words.
        Please respond as quickly as possible.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating!
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conds.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'words': 'way', 'number_of_letters': 3, 'corrAns': 'right'},
      {'words': 'woy', 'number_of_letters': 3, 'corrAns': 'left'},
      {'words': 'and', 'number_of_letters': 3, 'corrAns': 'right'},
      {'words': 'anf', 'number_of_letters': 3, 'corrAns': 'left'},
      {'words': 'new', 'number_of_letters': 3, 'corrAns': 'right'},
      {'words': 'neu', 'number_of_letters': 3, 'corrAns': 'left'},
      {'words': 'for', 'number_of_letters': 3, 'corrAns': 'right'},
      {'words': 'fot', 'number_of_letters': 3, 'corrAns': 'left'},
      {'words': 'out', 'number_of_letters': 3, 'corrAns': 'right'},
      {'words': 'ous', 'number_of_letters': 3, 'corrAns': 'left'},
      {'words': 'want', 'number_of_letters': 4, 'corrAns': 'right'},
      {'words': 'wunt', 'number_of_letters': 4, 'corrAns': 'left'},
      {'words': 'much', 'number_of_letters': 4, 'corrAns': 'right'},
      {'words': 'mech', 'number_of_letters': 4, 'corrAns': 'left'},
      {'words': 'play', 'number_of_letters': 4, 'corrAns': 'right'},
      {'words': 'ptay', 'number_of_letters': 4, 'corrAns': 'left'},
      {'words': 'hour', 'number_of_letters': 4, 'corrAns': 'right'},
      {'words': 'heur', 'number_of_letters': 4, 'corrAns': 'left'},
      {'words': 'line', 'number_of_letters': 4, 'corrAns': 'right'},
      {'words': 'lipe', 'number_of_letters': 4, 'corrAns': 'left'},
      {'words': 'their', 'number_of_letters': 5, 'corrAns': 'right'},
      {'words': 'theyr', 'number_of_letters': 5, 'corrAns': 'left'},
      {'words': 'about', 'number_of_letters': 5, 'corrAns': 'right'},
      {'words': 'aboot', 'number_of_letters': 5, 'corrAns': 'left'}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
    Routine trial
  LoopTerminator trials
  Routine thanks
